// Bspline Transformation

// Image Types
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

// Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(FixedImagePyramidSchedule 8 8 4 4 2 2 1 1)
(MovingImagePyramidSchedule 8 8 4 4 2 2 1 1)
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "false")

// Number of resolutions
(NumberOfResolutions 3)

// Grid Spacing
(FinalGridSpacingInVoxels 25.0 25.0 25.0)

// Combining transforms
(HowToCombineTransforms "Compose")

// Output options
(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")
(WriteDiffusionFiles "true")

// Elastix version option
(UseFastAndLowMemoryVersion "true")

// Maximum number of iterations
(MaximumNumberOfIterations 5000)

// Histogram bins
(NumberOfHistogramBins 128)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

// Spatial samples
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1)
(UseRandomSampleRegion "true")
(SampleRegionSize 50.0 50.0 50.0)
(NumberOfSpatialSamples 10000)
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "false")  // This is false to avoid crashing if optimal overlap is not found
(MaximumNumberOfSamplingAttempts 5) // 10

// BSpline interpolation order
(BSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)

// Default pixel value
(DefaultPixelValue 0)

// SP parameters
(SP_a 10000.0)
(SP_A 100.0)
(SP_alpha 0.6)